global device ML_STAR ("384SerialDilution.lay", "ML_STAR", hslTrue);
#include "384SerialDilution.res"
variable loopCounter1;
variable loopCounter2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
    ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.TargetPlate_Diluent.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.TargetPlate_Diluent, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
        if (
           (ML_STAR.TargetPlate_Diluent.GetCurrentPosition() > 0 && ML_STAR.TargetPlate_Diluent.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.TargetPlate_Diluent.SetMax(ML_STAR.TargetPlate_Diluent.GetTotal());
      ML_STAR.TargetPlate_Diluent.SetCurrentPosition(1);
    }
    {
      for(loopCounter2 = 0; loopCounter2 < 23;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._F9C8831D_6785_415e_8875_720FF46AC35C("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"); // EasyHead384Aspirate
        }
        {
          	ML_STAR._63ECF88F_F20B_4cd9_A5FF_C9BA9A057BB8("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"); // EasyHead384Dispense
        }
      }
    }
  } }
