#include "OnePlateToPlate.res"
global device ML_STAR ("OnePlateToPlate.lay", "ML_STAR", hslTrue);
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Source, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Source.GetCurrentPosition() > 0 && ML_STAR.Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Source.SetMax(ML_STAR.Source.GetTotal());
      ML_STAR.Source.SetCurrentPosition(1);
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  } }
