#include "TubesToPlateWithNeedles.res"
global device ML_STAR ("TubesToPlateWithNeedles.lay", "ML_STAR", hslTrue);
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(2);
    PTL::SetLoadingSequence(0, ML_STAR.Plate, 1, -10, hslFalse, hslFalse, "");
    PTL::SetLoadingSequence(1, ML_STAR.Samples, 1, -10, hslTrue, hslFalse, "");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.Plate);
    PTL::GetLoadingSequence(1, ML_STAR.Samples);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "RinseTime1", 5, 0);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "SoakTime1", 5, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "FlowRate1", 11, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "RinseTime2", 0, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "SoakTime2", 0, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "FlowRate2", 11, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "DrainingTime", 10, 1);
    PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "StartWashLiquid", 0, 2);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Samples.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Samples, 1);
        loopCounter1 = loopCounter1 + 1;
        AlignSequences(hslTrue, ML_STAR.Plate, 1, ML_STAR.Samples, 1, ML_STAR.WashStations, 1);
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "ErrorHandling", 3, 1);
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "UserResponseTime", hslInfinite, 1);
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "NeedlePickupChannelVariable", "", 1);
        if( 0 == PTL::NeedlePickup(ML_STAR, ML_STAR.WashStations, hslFalse) )
        {
              PTL::RaiseRuntimeError(-1523318528, PTL::IDS::smartStepNeedlePickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "ErrorHandling", 3, 1);
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "UserResponseTime", hslInfinite, 1);
        PTL::SetWashingState(ML_STAR, ML_STAR.WashStations, "NeedleEjectChannelVariable", "", 1);
        if( 0 == PTL::NeedleEject(ML_STAR, ML_STAR.WashStations, hslTrue) )
        {
              PTL::RaiseRuntimeError(-1489764096, PTL::IDS::smartStepNeedleEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (ML_STAR.Samples.GetCurrentPosition() > 0 && ML_STAR.Samples.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Samples.SetMax(ML_STAR.Samples.GetTotal());
      ML_STAR.Samples.SetCurrentPosition(1);
    }
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(2);
    PTL::SetUnloadingSequence(0, ML_STAR.Samples, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.Plate, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.Samples);
    PTL::GetUnloadingSequence(1, ML_STAR.Plate);
  } }
