#include "HitPick.res"
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
global device ML_STAR ("HitPick.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
variable threshold;
variable labid;
variable sqlSelect;
variable sqlselect;
variable od;
variable posid;
variable loopCounter1;
file file1;
sequence seq_CherryPick_Destination_All;
sequence seq_HitPick_Destination_All;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("Enter the threshold for hits"), hslString, "1.0");
    dialogHandle1.ShowInput(Translate("User Input"), hslInfinite, hslOKOnly | hslDefButton1);
    threshold = dialogHandle1.GetInputField(0);
    sqlSelect = Translate("SELECT * FROM [absorbanc$] WHERE OD >") + threshold;
    SeqRemoveAll(ML_STAR.Hits);
    file1.AddField("LabID", labid, hslString, 20);
    file1.AddField("PosID", posid, hslString, 20);
    file1.AddField("OD", od, hslFloat);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open("ADSData3.csv", hslRead, sqlselect) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "ADSData3.csv", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(ML_STAR.Hits, labid, posid);
        TrcTrace8(Translate("Found hit : labid ="), labid, Translate(", posid ="), posid, Translate(", od ="), od, Translate(""), Translate(""));
      }
    }
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(3);
    PTL::SetLoadingSequence(0, ML_STAR.Tips, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(1, ML_STAR.Hits, 1, -10, hslFalse, hslFalse, "");
    PTL::SetLoadingSequence(2, ML_STAR.Target, 1, -10, hslFalse, hslFalse, "");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.Tips);
    PTL::GetLoadingSequence(1, ML_STAR.Hits);
    PTL::GetLoadingSequence(2, ML_STAR.Target);
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 1);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 2);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.Tips, ML_STAR.Hits, ML_STAR.Target, 1, 1, 30, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(3);
    PTL::SetUnloadingSequence(0, ML_STAR.Target, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.Hits, hslFalse, "");
    PTL::SetUnloadingSequence(2, ML_STAR.Tips, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.Target);
    PTL::GetUnloadingSequence(1, ML_STAR.Hits);
    PTL::GetUnloadingSequence(2, ML_STAR.Tips);
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_1[];
      variable _ColumnIdsArray_1[];
      variable _ColumnNamesArray_1[];
      variable _ExperimentsArray_1[];
      _FilterIdsArray_1.SetSize(0);
      _ColumnNamesArray_1.SetSize(14);
      _ColumnIdsArray_1.SetSize(14);
      _ColumnNamesArray_1.SetAt(0, "RecordId");
      _ColumnIdsArray_1.SetAt(0, 0);
      _ColumnNamesArray_1.SetAt(1, "TRackBC");
      _ColumnIdsArray_1.SetAt(1, 1);
      _ColumnNamesArray_1.SetAt(2, "TLabwareId");
      _ColumnIdsArray_1.SetAt(2, 2);
      _ColumnNamesArray_1.SetAt(3, "TPositionId");
      _ColumnIdsArray_1.SetAt(3, 3);
      _ColumnNamesArray_1.SetAt(4, "TPositionBC");
      _ColumnIdsArray_1.SetAt(4, 4);
      _ColumnNamesArray_1.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_1.SetAt(5, 5);
      _ColumnNamesArray_1.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_1.SetAt(6, 6);
      _ColumnNamesArray_1.SetAt(7, "TVolume");
      _ColumnIdsArray_1.SetAt(7, 7);
      _ColumnNamesArray_1.SetAt(8, "SRackBC");
      _ColumnIdsArray_1.SetAt(8, 8);
      _ColumnNamesArray_1.SetAt(9, "SLabwareId");
      _ColumnIdsArray_1.SetAt(9, 9);
      _ColumnNamesArray_1.SetAt(10, "SPositionId");
      _ColumnIdsArray_1.SetAt(10, 10);
      _ColumnNamesArray_1.SetAt(11, "SPositionBC");
      _ColumnIdsArray_1.SetAt(11, 11);
      _ColumnNamesArray_1.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_1.SetAt(12, 12);
      _ColumnNamesArray_1.SetAt(13, "UserName");
      _ColumnIdsArray_1.SetAt(13, 13);
      _ExperimentsArray_1.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_HitPick_Destination_All, 0, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "HitPickMappingFile.csv", 0, 0, "C:\Program Files (x86)\HAMILTON", 1);
    }
  } }
