 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "AliquotReagentsFromTroughsToTubes.res"
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLBarcodeReader.hsl" }
 namespace _Method { #include "HSLKitLotLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLLabwareStateLib.hsl" }
global device ML_STAR ("AliquotReagentsFromTroughsToTubes.lay", "ML_STAR", hslTrue);
variable bufferVolume;
variable TipCounterVariable;
variable startingVolumeReagent;
variable StartingConcentrationReagent;
variable startingConcentrationReagent;
variable finalVolumeReagent;
variable StartingVolumeReagent;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable OutputReturn;
variable loopCounter1;
variable loopCounter2;
variable NumSamples;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    startingVolumeReagent = Translate("MyReagentVolume");
    TipCounterVariable = Translate("MyStandardTips");
    NumSamples = Translate("MySamples");
    startingConcentrationReagent = Translate("MyReagentConcentration");
    dialogHandle_1.SetInputSize(3);
    dialogHandle_1.SetInputField(0, Translate("What is the starting volume for the reagent today?"), hslFloat, 20.0, 20.0);
    dialogHandle_1.SetInputField(1, Translate("What is the starting concentration for the reagent today?"), hslFloat, 0.9);
    dialogHandle_1.SetInputField(2, Translate("How many samples to process today?"), hslInteger, 96, 1, 96);
    dialogHandle_1.ShowInput(Translate("Input"), hslInfinite, hslOKOnly | hslDefButton1);
    startingVolumeReagent = dialogHandle_1.GetInputField(0);
    startingConcentrationReagent = dialogHandle_1.GetInputField(1);
    NumSamples = dialogHandle_1.GetInputField(2);
    finalVolumeReagent = StartingVolumeReagent * StartingConcentrationReagent;
    bufferVolume = finalVolumeReagent - startingVolumeReagent;
    TipCount::Edit2(ML_STAR.Tips, TipCounterVariable, ML_STAR, 7);
    ML_STAR.Tubes.SetCount(NumSamples);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Tubes.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Tubes, 1);
        loopCounter1 = loopCounter1 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Reagent, 1, ML_STAR.Tubes, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Tubes.GetCurrentPosition() > 0 && ML_STAR.Tubes.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Tubes.SetMax(ML_STAR.Tubes.GetTotal());
      ML_STAR.Tubes.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.Tubes.SetCount(NumSamples);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Tubes.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Tubes, 1);
        loopCounter2 = loopCounter2 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Buffer, 1, ML_STAR.Tubes, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Tubes.GetCurrentPosition() > 0 && ML_STAR.Tubes.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Tubes.SetMax(ML_STAR.Tubes.GetTotal());
      ML_STAR.Tubes.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    dialogHandle_2.SetOutput(Translate("Unload carriers?"));
    OutputReturn = dialogHandle_2.ShowOutput(Translate("Output"), hslYesNo | hslInformation | hslDefButton2, hslInfinite);
    if (OutputReturn == 6)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, ML_STAR.Tubes);
    {
      variable _FilterIdsArray_3[];
      variable _ColumnIdsArray_3[];
      variable _ColumnNamesArray_3[];
      variable _ExperimentsArray_3[];
      _FilterIdsArray_3.SetSize(0);
      _ColumnNamesArray_3.SetSize(14);
      _ColumnIdsArray_3.SetSize(14);
      _ColumnNamesArray_3.SetAt(0, "RecordId");
      _ColumnIdsArray_3.SetAt(0, 0);
      _ColumnNamesArray_3.SetAt(1, "TRackBC");
      _ColumnIdsArray_3.SetAt(1, 1);
      _ColumnNamesArray_3.SetAt(2, "TLabwareId");
      _ColumnIdsArray_3.SetAt(2, 2);
      _ColumnNamesArray_3.SetAt(3, "TPositionId");
      _ColumnIdsArray_3.SetAt(3, 3);
      _ColumnNamesArray_3.SetAt(4, "TPositionBC");
      _ColumnIdsArray_3.SetAt(4, 4);
      _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_3.SetAt(5, 5);
      _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_3.SetAt(6, 6);
      _ColumnNamesArray_3.SetAt(7, "TVolume");
      _ColumnIdsArray_3.SetAt(7, 7);
      _ColumnNamesArray_3.SetAt(8, "SRackBC");
      _ColumnIdsArray_3.SetAt(8, 8);
      _ColumnNamesArray_3.SetAt(9, "SLabwareId");
      _ColumnIdsArray_3.SetAt(9, 9);
      _ColumnNamesArray_3.SetAt(10, "SPositionId");
      _ColumnIdsArray_3.SetAt(10, 10);
      _ColumnNamesArray_3.SetAt(11, "SPositionBC");
      _ColumnIdsArray_3.SetAt(11, 11);
      _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_3.SetAt(12, 12);
      _ColumnNamesArray_3.SetAt(13, "UserName");
      _ColumnIdsArray_3.SetAt(13, 13);
      _ExperimentsArray_3.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.Tubes, 0, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "ProductFile.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
  } }
