 namespace _Method { #include "HSLTipCountingLib.hsl" } 
 namespace _Method { #include "HSLML_STARLib.hsl" } 
#include "AliquotReagentsFromTroughsToTubes.res"
 namespace _Method { #include "HSLSeqLib.hsl" } 
 namespace _Method { #include "HSLTrcLib.hsl" } 
 namespace _Method { #include "HSLBarcodeReader.hsl" } 
 namespace _Method { #include "HSLKitLotLib.hsl" } 
 namespace _Method { #include "HSLFilLib.hsl" } 
 namespace _Method { #include "HSLLabwareStateLib.hsl" } 
/* {{ 2 "LibraryInsertLine" "" */ // }} ""
global device ML_STAR ("AliquotReagentsFromTroughsToTubes.lay", "ML_STAR", hslTrue);
variable bufferVolume;
variable TipCounterVariable;
variable startingVolumeReagent;
variable StartingConcentrationReagent;
variable startingConcentrationReagent;
variable finalVolumeReagent;
variable StartingVolumeReagent;
dialog dialogHandleC353432F25694bf2875020EC08C7BB0D;
variable OutputReturn;
variable loopCounter1;
variable loopCounter2;
variable NumSamples;
dialog dialogHandle44E67DA081F8497284AB29427ADE07E7;
variable reagentVolumeAdjustmentFactor;
variable finalMassReagent;
variable reagentVolumePerTube;
variable bufferVolumePerTube;
/* {{ 2 "VariableInsertLine" "" */ // }} ""
// {{ 2 "TemplateIncludeBlock" ""
 namespace _Method { #include "HSLMETEDLib.hs_" } 
 namespace _Method { #include "HSLMECCLib.hs_" } 
 namespace _Method { #include "HSLPTLLib.hsl" } 
 namespace _Method { #include "HSLSTCCLib.hs_" } 
// }} ""
// {{{ 2 "LocalSubmethodInclude" ""
 namespace _Method {  #include __filename__ ".sub"  } 
// }} ""
/* {{ 2 "ProcessInsertLine" "" */ // }} ""
// {{{ 5 "main" "Begin"
namespace _Method { method main(  ) void {
// }} ""
// {{ 5 "main" "InitLocals"
// }} ""
// {{ 2 "AutoInitBlock" ""
PTL::SetWashingStateDefault("RinseTime1", 5);
PTL::SetWashingStateDefault("SoakTime1", 5);
PTL::SetWashingStateDefault("FlowRate1", 11);
PTL::SetWashingStateDefault("RinseTime2", 0);
PTL::SetWashingStateDefault("SoakTime2", 0);
PTL::SetWashingStateDefault("FlowRate2", 11);
PTL::SetWashingStateDefault("DrainingTime", 10);
PTL::SetWashingStateDefault("StartWashLiquid", 0);
PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
::RegisterAbortHandler( "OnAbort");
// }} ""
// {{ 1 1 0 "10f033c4_3428_4308_830ce5169f0767eb" "ML_STAR:{1C0C0CB0-7C87-11D3-AD83-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("10f033c4_3428_4308_830ce5169f0767eb"); // Initialize
}
// }} ""
// {{ 2 1 0 "bd280ba9_a721_48f9_92e12a142fef256c" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 3 1 0 "a6478fca_3eeb_40cf_af719d3cc50275db" "ML_STAR:{54114402-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("a6478fca_3eeb_40cf_af719d3cc50275db"); // LoadCarrier
}
// }} ""
// {{ 4 1 0 "1bca791f_6a32_4a22_8bfc1eb16af9268f" "ML_STAR:{54114402-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("1bca791f_6a32_4a22_8bfc1eb16af9268f"); // LoadCarrier
}
// }} ""
// {{ 5 1 0 "7e63679b_d462_4ab7_b1e689dd2289548e" "ML_STAR:{54114402-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("7e63679b_d462_4ab7_b1e689dd2289548e"); // LoadCarrier
}
// }} ""
// {{ 6 1 0 "ebc6045c_b006_4328_87d44a8d79917466" "ML_STAR:{54114402-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("ebc6045c_b006_4328_87d44a8d79917466"); // LoadCarrier
}
// }} ""
// {{ 7 1 0 "bd280ba9_a721_48f9_92e12a142fef256c" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 8 1 0 "a9a6ff82_60da_4eec_b93a96b27d8138ec" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 9 1 0 "beb5a40d_76ee_447b_b336214a6f993257" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{ 10 1 0 "eb76c84d_cabc_4dac_b538d2c0301565a3" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
startingVolumeReagent = Translate("MyReagentVolume");
// }} ""
// {{ 11 1 0 "43552a0c_c8e7_41f5_87f4bba7209377e0" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
TipCounterVariable = Translate("MyStandardTips");
// }} ""
// {{ 12 1 0 "f76778fd_70ee_448c_95514d70e14512fe" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
NumSamples = Translate("MySamples");
// }} ""
// {{ 13 1 0 "f652cbbf_d720_4b42_9686cacdec1ad601" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
startingConcentrationReagent = Translate("MyReagentConcentration");
// }} ""
// {{ 14 1 0 "07e4c579_279a_4a48_a4027a239e96e83f" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
reagentVolumeAdjustmentFactor = 0.6;
// }} ""
// {{ 15 1 0 "a9a6ff82_60da_4eec_b93a96b27d8138ec" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 16 1 0 "ff531052_1010_4c18_a00e71110275a026" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 17 1 0 "e522a7fa_3117_4e32_88166f4293040517" "{B31F3539-5D80-11d4-A5EB-0050DA737D89}"
dialogHandle44E67DA081F8497284AB29427ADE07E7.SetInputSize(3);
dialogHandle44E67DA081F8497284AB29427ADE07E7.SetInputField(0, Translate("What is the starting volume for the reagent today?"), hslFloat, 20.0, 20.0);
dialogHandle44E67DA081F8497284AB29427ADE07E7.SetInputField(1, Translate("What is the starting concentration for the reagent today?"), hslFloat, 0.9);
dialogHandle44E67DA081F8497284AB29427ADE07E7.SetInputField(2, Translate("How many samples to process today?"), hslInteger, 96, 1, 96);
dialogHandle44E67DA081F8497284AB29427ADE07E7.ShowInput(Translate("Input"), hslInfinite, hslOKOnly | hslDefButton1);
startingVolumeReagent = dialogHandle44E67DA081F8497284AB29427ADE07E7.GetInputField(0);
startingConcentrationReagent = dialogHandle44E67DA081F8497284AB29427ADE07E7.GetInputField(1);
NumSamples = dialogHandle44E67DA081F8497284AB29427ADE07E7.GetInputField(2);
// }} ""
// {{ 18 1 0 "cda45162_850f_450b_b35f4fd6b16da198" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
finalMassReagent = StartingVolumeReagent * StartingConcentrationReagent;
// }} ""
// {{ 19 1 0 "628fc6be_5b1f_4a91_bbc5cf3fc435ce3a" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
finalVolumeReagent = finalMassReagent * reagentVolumeAdjustmentFactor;
// }} ""
// {{ 20 1 0 "a0afb4f7_ec08_4430_88528a048bfe0856" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
reagentVolumePerTube = finalVolumeReagent / (NumSamples * 1.0);
// }} ""
// {{ 21 1 0 "385f50dd_e729_4a81_8f73a03ed05db7b0" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
bufferVolume = finalVolumeReagent - startingVolumeReagent;
// }} ""
// {{ 22 1 0 "92fad24b_80e6_4877_a4764115dc2544a7" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
bufferVolumePerTube = bufferVolume / (NumSamples * 1.0);
// }} ""
// {{ 23 1 0 "ff531052_1010_4c18_a00e71110275a026" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 24 1 0 "e9862283_e978_4095_9bafabf3fed87852" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 25 1 0 "5c9174d3_9c18_44e9_98e1a1d898caecb3" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Edit2(ML_STAR.Tips, TipCounterVariable, ML_STAR, 7);
// }} ""
// {{ 26 1 0 "529adf1d_833f_4d1d_a8b4debb5fb9ba38" "{B31F353C-5D80-11d4-A5EB-0050DA737D89}"
ML_STAR.Tubes.SetCount(NumSamples);
// }} ""
// {{ 27 1 0 "159a8d65_c7eb_4218_9f84d621942bb94a" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
loopCounter1 = 0;
while (
   (ML_STAR.Tubes.GetCurrentPosition() > 0)
)
{
AlignSequences(hslTrue, ML_STAR.Tubes, 1);
loopCounter1 = loopCounter1 + 1;
// }} ""
// {{ 28 1 0 "14550527_49c9_4222_8f43fa6874e00297" "{9C4E7149-5F68-4b06-81C2-DF803E2CBE28}"
AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Reagent, 1, ML_STAR.Tubes, 1);
// }} ""
// {{ 29 1 0 "2c83ab77_8507_4837_bcef1010fa2bbb9b" "ML_STAR:{541143FA-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("2c83ab77_8507_4837_bcef1010fa2bbb9b"); // TipPickUp
}
// }} ""
// {{ 30 1 0 "aab282a0_30cd_4c63_b8bfed3d13586f9a" "ML_STAR:{E91EFCB6-A447-4dfc-828E-7EBF29139CD2}"
{
	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("aab282a0_30cd_4c63_b8bfed3d13586f9a"); // EasyAspirate
}
// }} ""
// {{ 31 1 0 "a0fdbdb3_1eed_4128_a826817448d8ba99" "ML_STAR:{01571348-0D66-4d27-9E97-65F9EE27C956}"
{
	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("a0fdbdb3_1eed_4128_a826817448d8ba99"); // EasyDispense
}
// }} ""
// {{ 32 1 0 "ba5d9348_67e7_43e4_b2e0f0c34115bf08" "ML_STAR:{541143FC-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("ba5d9348_67e7_43e4_b2e0f0c34115bf08"); // TipEject
}
// }} ""
// {{ 33 1 0 "159a8d65_c7eb_4218_9f84d621942bb94a" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
if (
   (ML_STAR.Tubes.GetCurrentPosition() > 0 && ML_STAR.Tubes.GetMax() == 0 )
)
{ MECC::EndlessSequenceLoopWarning(GetFileName()); }

}
ML_STAR.Tubes.SetMax(ML_STAR.Tubes.GetTotal());
ML_STAR.Tubes.SetCurrentPosition(1);
}
// }} ""
// {{{ 34 1 0 "243cc224_a4f6_4e7f_b09269026dd8ae4f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
// }} ""
// {{ 35 1 0 "73b7e75a_6016_4e11_b8f045d29a6ed789" "{B31F353C-5D80-11d4-A5EB-0050DA737D89}"
ML_STAR.Tubes.SetCount(NumSamples);
// }} ""
// {{ 36 1 0 "e9862283_e978_4095_9bafabf3fed87852" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 37 1 0 "cd3acff5_8b93_4d04_8836259bf7d488f3" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 38 1 0 "b9d348be_9954_438e_80e0c2c68db9b9e7" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
loopCounter2 = 0;
while (
   (ML_STAR.Tubes.GetCurrentPosition() > 0)
)
{
AlignSequences(hslTrue, ML_STAR.Tubes, 1);
loopCounter2 = loopCounter2 + 1;
// }} ""
// {{ 39 1 0 "1bcd0c5e_56b8_4908_907055a67953dcee" "{9C4E7149-5F68-4b06-81C2-DF803E2CBE28}"
AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Buffer, 1, ML_STAR.Tubes, 1);
// }} ""
// {{ 40 1 0 "03a1909c_08d2_4691_a215a92993114cc3" "ML_STAR:{541143FA-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("03a1909c_08d2_4691_a215a92993114cc3"); // TipPickUp
}
// }} ""
// {{ 41 1 0 "09af6ce2_297c_4b50_b5c2a9a06da77c42" "ML_STAR:{E91EFCB6-A447-4dfc-828E-7EBF29139CD2}"
{
	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("09af6ce2_297c_4b50_b5c2a9a06da77c42"); // EasyAspirate
}
// }} ""
// {{ 42 1 0 "50344b60_8eeb_4771_b84a76cb924f4bd9" "ML_STAR:{01571348-0D66-4d27-9E97-65F9EE27C956}"
{
	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("50344b60_8eeb_4771_b84a76cb924f4bd9"); // EasyDispense
}
// }} ""
// {{ 43 1 0 "dd45650a_bd20_4157_b0899be52e87b7a6" "ML_STAR:{541143FC-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("dd45650a_bd20_4157_b0899be52e87b7a6"); // TipEject
}
// }} ""
// {{ 44 1 0 "b9d348be_9954_438e_80e0c2c68db9b9e7" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
if (
   (ML_STAR.Tubes.GetCurrentPosition() > 0 && ML_STAR.Tubes.GetMax() == 0 )
)
{ MECC::EndlessSequenceLoopWarning(GetFileName()); }

}
ML_STAR.Tubes.SetMax(ML_STAR.Tubes.GetTotal());
ML_STAR.Tubes.SetCurrentPosition(1);
}
// }} ""
// {{{ 45 1 0 "440df8ce_1a63_4f2d_92de37bd54a18076" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
// }} ""
// {{ 46 1 0 "cd3acff5_8b93_4d04_8836259bf7d488f3" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 47 1 0 "889539a9_3bc0_41f2_99248f13af2016aa" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 48 1 0 "39d4ac12_37b0_4d9b_b73b73da1f44188a" "{21E07B31-8D2E-11d4-A3B8-002035848439}"
dialogHandleC353432F25694bf2875020EC08C7BB0D.SetOutput(Translate("Unload carriers?"));
OutputReturn = dialogHandleC353432F25694bf2875020EC08C7BB0D.ShowOutput(Translate("Output"), hslYesNo | hslInformation | hslDefButton2, hslInfinite);
// }} ""
// {{ 49 1 0 "26b2e33e_869f_4847_805686b2abf4b3ed" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (OutputReturn == 6)
{
// }} ""
// {{ 50 1 0 "c25f3909_57b3_4cc6_8d097d599701ef44" "ML_STAR:{54114400-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("c25f3909_57b3_4cc6_8d097d599701ef44"); // UnloadCarrier
}
// }} ""
// {{ 51 1 0 "2e360bf0_0a92_4bd2_8a1436804cf8e757" "ML_STAR:{54114400-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("2e360bf0_0a92_4bd2_8a1436804cf8e757"); // UnloadCarrier
}
// }} ""
// {{ 52 1 0 "4e6896f9_149e_4257_be46c22be1145045" "ML_STAR:{54114400-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("4e6896f9_149e_4257_be46c22be1145045"); // UnloadCarrier
}
// }} ""
// {{ 53 1 0 "6c172331_583a_440c_8ba0a7c60adb6b3f" "ML_STAR:{54114400-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("6c172331_583a_440c_8ba0a7c60adb6b3f"); // UnloadCarrier
}
// }} ""
// {{ 54 1 0 "a27995bd_4733_48a5_83308c7b5168e634" "ML_STAR:{54114400-7FA2-11D3-AD85-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("a27995bd_4733_48a5_83308c7b5168e634"); // UnloadCarrier
}
// }} ""
// {{ 55 1 0 "26b2e33e_869f_4847_805686b2abf4b3ed" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 56 1 0 "889539a9_3bc0_41f2_99248f13af2016aa" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 57 1 0 "608bcaa6_af97_4a6a_bc2b7ff6744cdf62" "{F705F40D-918B-44B9-92A7-C1936061091E}"
STCC::ResetFilterSequences();
STCC::AddFilterSequence(ML_STAR, ML_STAR.Tubes);
{
variable _FilterIdsArray_DD839D8924184a0b9E47965EA1FD36C9[];
variable _ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9[];
variable _ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9[];
variable _ExperimentsArray_DD839D8924184a0b9E47965EA1FD36C9[];
_FilterIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetSize(0);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetSize(14);
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetSize(14);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(0, "RecordId");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(0, 0);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(1, "TRackBC");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(1, 1);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(2, "TLabwareId");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(2, 2);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(3, "TPositionId");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(3, 3);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(4, "TPositionBC");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(4, 4);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(5, "TStatusSummary");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(5, 5);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(6, "TSumStateDescription");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(6, 6);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(7, "TVolume");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(7, 7);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(8, "SRackBC");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(8, 8);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(9, "SLabwareId");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(9, 9);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(10, "SPositionId");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(10, 10);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(11, "SPositionBC");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(11, 11);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(12, "ActionDateTime");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(12, 12);
_ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(13, "UserName");
_ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9.SetAt(13, 13);
_ExperimentsArray_DD839D8924184a0b9E47965EA1FD36C9.SetSize(0);
STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.Tubes, 0, _FilterIdsArray_DD839D8924184a0b9E47965EA1FD36C9, 0, _ColumnIdsArray_DD839D8924184a0b9E47965EA1FD36C9, _ColumnNamesArray_DD839D8924184a0b9E47965EA1FD36C9, _ExperimentsArray_DD839D8924184a0b9E47965EA1FD36C9, "ProductFile.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
}
// }} ""
// {{ 2 "AutoExitBlock" ""
// }} ""
// {{{ 5 "main" "End"
} }
// }} ""
// $$author=Sophytes$$valid=0$$time=2021-04-10 13:14$$checksum=a9b16bbf$$length=087$$
