#include "EnzymeAliquoting.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
variable TipCounterVariable;
variable NumSamples;
variable loopCounter2;
global device ML_STAR ("EnzymeAliquoting.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("How many samples to aliquot for this run?"), hslInteger, 96, 96, 1920);
    dialogHandle1.ShowInput(Translate("Required Operator Input"), hslInfinite, hslOKOnly | hslDefButton1);
    NumSamples = dialogHandle1.GetInputField(0);
    TipCounterVariable = Translate("MyStandardTips");
    NumSamples = Translate("MySamples");
    TipCount::Edit2(ML_STAR.Tips, TipCounterVariable, ML_STAR, 7);
    ML_STAR.DestinationPlates.SetCount(NumSamples);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.DestinationPlates.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DestinationPlates, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.DestinationPlates.GetCurrentPosition() > 0 && ML_STAR.DestinationPlates.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DestinationPlates.SetMax(ML_STAR.DestinationPlates.GetTotal());
      ML_STAR.DestinationPlates.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(3);
    PTL::SetUnloadingSequence(0, ML_STAR.DestinationPlates, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.Tips, hslFalse, "");
    PTL::SetUnloadingSequence(2, ML_STAR.EnzymeTrough, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.DestinationPlates);
    PTL::GetUnloadingSequence(1, ML_STAR.Tips);
    PTL::GetUnloadingSequence(2, ML_STAR.EnzymeTrough);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, ML_STAR.DestinationPlates);
    {
      variable _FilterIdsArray_1[];
      variable _ColumnIdsArray_1[];
      variable _ColumnNamesArray_1[];
      variable _ExperimentsArray_1[];
      _FilterIdsArray_1.SetSize(0);
      _ColumnNamesArray_1.SetSize(14);
      _ColumnIdsArray_1.SetSize(14);
      _ColumnNamesArray_1.SetAt(0, "RecordId");
      _ColumnIdsArray_1.SetAt(0, 0);
      _ColumnNamesArray_1.SetAt(1, "TRackBC");
      _ColumnIdsArray_1.SetAt(1, 1);
      _ColumnNamesArray_1.SetAt(2, "TLabwareId");
      _ColumnIdsArray_1.SetAt(2, 2);
      _ColumnNamesArray_1.SetAt(3, "TPositionId");
      _ColumnIdsArray_1.SetAt(3, 3);
      _ColumnNamesArray_1.SetAt(4, "TPositionBC");
      _ColumnIdsArray_1.SetAt(4, 4);
      _ColumnNamesArray_1.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_1.SetAt(5, 5);
      _ColumnNamesArray_1.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_1.SetAt(6, 6);
      _ColumnNamesArray_1.SetAt(7, "TVolume");
      _ColumnIdsArray_1.SetAt(7, 7);
      _ColumnNamesArray_1.SetAt(8, "SRackBC");
      _ColumnIdsArray_1.SetAt(8, 8);
      _ColumnNamesArray_1.SetAt(9, "SLabwareId");
      _ColumnIdsArray_1.SetAt(9, 9);
      _ColumnNamesArray_1.SetAt(10, "SPositionId");
      _ColumnIdsArray_1.SetAt(10, 10);
      _ColumnNamesArray_1.SetAt(11, "SPositionBC");
      _ColumnIdsArray_1.SetAt(11, 11);
      _ColumnNamesArray_1.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_1.SetAt(12, 12);
      _ColumnNamesArray_1.SetAt(13, "UserName");
      _ColumnIdsArray_1.SetAt(13, 13);
      _ExperimentsArray_1.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.DestinationPlates, 0, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "EzymeDestinationPlates.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
  } }
