#include "MediaTransfer.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
dialog dialogHandle1;
variable TipCounterVariable;
variable NumSamples;
global device ML_STAR ("MediaTransfer.lay", "ML_STAR", hslTrue);
variable loopCounter1;
variable NumSamples1;
variable loopCounter2;
variable loopCounter3;
variable loopCounter4;
variable loopCounter5;
variable loopCounter6;
variable loopCounter7;
variable loopCounter8;
variable loopCounter9;
variable loopCounter10;
variable loopCounter11;
variable loopCounter12;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(12);
    PTL::SetLoadingSequence(0, ML_STAR.SampleCarrier_1, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(1, ML_STAR.SampleCarrier_2, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(2, ML_STAR.SampleCarrier_3, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(3, ML_STAR.SampleCarrier_4, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(4, ML_STAR.SampleCarrier_5, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(5, ML_STAR.SampleCarrier_6, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(6, ML_STAR.SampleCarrier_7, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(7, ML_STAR.SampleCarrier_8, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(8, ML_STAR.SampleCarrier_9, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(9, ML_STAR.SampleCarrier_10, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(10, ML_STAR.SampleCarrier_11, 1, -10, hslTrue, hslFalse, "");
    PTL::SetLoadingSequence(11, ML_STAR.SampleCarrier_12, 1, -10, hslTrue, hslFalse, "");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.SampleCarrier_1);
    PTL::GetLoadingSequence(1, ML_STAR.SampleCarrier_2);
    PTL::GetLoadingSequence(2, ML_STAR.SampleCarrier_3);
    PTL::GetLoadingSequence(3, ML_STAR.SampleCarrier_4);
    PTL::GetLoadingSequence(4, ML_STAR.SampleCarrier_5);
    PTL::GetLoadingSequence(5, ML_STAR.SampleCarrier_6);
    PTL::GetLoadingSequence(6, ML_STAR.SampleCarrier_7);
    PTL::GetLoadingSequence(7, ML_STAR.SampleCarrier_8);
    PTL::GetLoadingSequence(8, ML_STAR.SampleCarrier_9);
    PTL::GetLoadingSequence(9, ML_STAR.SampleCarrier_10);
    PTL::GetLoadingSequence(10, ML_STAR.SampleCarrier_11);
    PTL::GetLoadingSequence(11, ML_STAR.SampleCarrier_12);
    NumSamples = 24;
    TipCounterVariable = Translate("MyHighVolumeTips");
    TipCount::Edit2(ML_STAR.Tips, TipCounterVariable, ML_STAR, 7);
    ML_STAR.SampleCarrier_1.SetCount(NumSamples);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.SampleCarrier_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_1, 1);
        loopCounter1 = loopCounter1 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_1, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_1.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_1.SetMax(ML_STAR.SampleCarrier_1.GetTotal());
      ML_STAR.SampleCarrier_1.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_1.SetCount(NumSamples);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.SampleCarrier_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_2, 1);
        loopCounter2 = loopCounter2 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_2, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_2.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_2.SetMax(ML_STAR.SampleCarrier_2.GetTotal());
      ML_STAR.SampleCarrier_2.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_2.SetCount(NumSamples);
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.SampleCarrier_3.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_3, 1);
        loopCounter3 = loopCounter3 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_3, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_3.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_3.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_3.SetMax(ML_STAR.SampleCarrier_3.GetTotal());
      ML_STAR.SampleCarrier_3.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_3.SetCount(NumSamples);
    {
      loopCounter4 = 0;
      while (
         (ML_STAR.SampleCarrier_4.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_4, 1);
        loopCounter4 = loopCounter4 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_4, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_4.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_4.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_4.SetMax(ML_STAR.SampleCarrier_4.GetTotal());
      ML_STAR.SampleCarrier_4.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_4.SetCount(NumSamples);
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(4);
    PTL::SetUnloadingSequence(0, ML_STAR.SampleCarrier_1, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.SampleCarrier_2, hslFalse, "");
    PTL::SetUnloadingSequence(2, ML_STAR.SampleCarrier_3, hslFalse, "");
    PTL::SetUnloadingSequence(3, ML_STAR.SampleCarrier_4, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.SampleCarrier_1);
    PTL::GetUnloadingSequence(1, ML_STAR.SampleCarrier_2);
    PTL::GetUnloadingSequence(2, ML_STAR.SampleCarrier_3);
    PTL::GetUnloadingSequence(3, ML_STAR.SampleCarrier_4);
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.SampleCarrier_5.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_5, 1);
        loopCounter5 = loopCounter5 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_5, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_5.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_5.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_5.SetMax(ML_STAR.SampleCarrier_5.GetTotal());
      ML_STAR.SampleCarrier_5.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_5.SetCount(NumSamples);
    {
      loopCounter6 = 0;
      while (
         (ML_STAR.SampleCarrier_6.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_6, 1);
        loopCounter6 = loopCounter6 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_6, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_6.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_6.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_6.SetMax(ML_STAR.SampleCarrier_6.GetTotal());
      ML_STAR.SampleCarrier_6.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_6.SetCount(NumSamples);
    {
      loopCounter7 = 0;
      while (
         (ML_STAR.SampleCarrier_7.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_7, 1);
        loopCounter7 = loopCounter7 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_7, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_7.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_7.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_7.SetMax(ML_STAR.SampleCarrier_7.GetTotal());
      ML_STAR.SampleCarrier_7.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_7.SetCount(NumSamples);
    {
      loopCounter8 = 0;
      while (
         (ML_STAR.SampleCarrier_8.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_8, 1);
        loopCounter8 = loopCounter8 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_8, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_8.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_8.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_8.SetMax(ML_STAR.SampleCarrier_8.GetTotal());
      ML_STAR.SampleCarrier_8.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_8.SetCount(NumSamples);
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(4);
    PTL::SetUnloadingSequence(0, ML_STAR.SampleCarrier_5, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.SampleCarrier_6, hslFalse, "");
    PTL::SetUnloadingSequence(2, ML_STAR.SampleCarrier_7, hslFalse, "");
    PTL::SetUnloadingSequence(3, ML_STAR.SampleCarrier_8, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.SampleCarrier_5);
    PTL::GetUnloadingSequence(1, ML_STAR.SampleCarrier_6);
    PTL::GetUnloadingSequence(2, ML_STAR.SampleCarrier_7);
    PTL::GetUnloadingSequence(3, ML_STAR.SampleCarrier_8);
    {
      loopCounter9 = 0;
      while (
         (ML_STAR.SampleCarrier_9.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_9, 1);
        loopCounter9 = loopCounter9 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_9, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_9.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_9.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_9.SetMax(ML_STAR.SampleCarrier_9.GetTotal());
      ML_STAR.SampleCarrier_9.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_9.SetCount(NumSamples);
    {
      loopCounter10 = 0;
      while (
         (ML_STAR.SampleCarrier_10.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_10, 1);
        loopCounter10 = loopCounter10 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_10, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_10.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_10.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_10.SetMax(ML_STAR.SampleCarrier_10.GetTotal());
      ML_STAR.SampleCarrier_10.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_10.SetCount(NumSamples);
    {
      loopCounter11 = 0;
      while (
         (ML_STAR.SampleCarrier_11.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_11, 1);
        loopCounter11 = loopCounter11 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_11, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_11.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_11.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_11.SetMax(ML_STAR.SampleCarrier_11.GetTotal());
      ML_STAR.SampleCarrier_11.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_11.SetCount(NumSamples);
    {
      loopCounter12 = 0;
      while (
         (ML_STAR.SampleCarrier_12.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.SampleCarrier_12, 1);
        loopCounter12 = loopCounter12 + 1;
        AlignSequences(hslTrue, ML_STAR.Tips, 1, ML_STAR.Media, 1, ML_STAR.SampleCarrier_12, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.SampleCarrier_12.GetCurrentPosition() > 0 && ML_STAR.SampleCarrier_12.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.SampleCarrier_12.SetMax(ML_STAR.SampleCarrier_12.GetTotal());
      ML_STAR.SampleCarrier_12.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.Tips, TipCounterVariable, ML_STAR);
    ML_STAR.SampleCarrier_12.SetCount(NumSamples);
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", hslInfinite);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(4);
    PTL::SetUnloadingSequence(0, ML_STAR.SampleCarrier_9, hslFalse, "");
    PTL::SetUnloadingSequence(1, ML_STAR.SampleCarrier_10, hslFalse, "");
    PTL::SetUnloadingSequence(2, ML_STAR.SampleCarrier_11, hslFalse, "");
    PTL::SetUnloadingSequence(3, ML_STAR.SampleCarrier_12, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, ML_STAR.SampleCarrier_9);
    PTL::GetUnloadingSequence(1, ML_STAR.SampleCarrier_10);
    PTL::GetUnloadingSequence(2, ML_STAR.SampleCarrier_11);
    PTL::GetUnloadingSequence(3, ML_STAR.SampleCarrier_12);
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_1[];
      variable _ColumnIdsArray_1[];
      variable _ColumnNamesArray_1[];
      variable _ExperimentsArray_1[];
      _FilterIdsArray_1.SetSize(0);
      _ColumnNamesArray_1.SetSize(14);
      _ColumnIdsArray_1.SetSize(14);
      _ColumnNamesArray_1.SetAt(0, "RecordId");
      _ColumnIdsArray_1.SetAt(0, 0);
      _ColumnNamesArray_1.SetAt(1, "TRackBC");
      _ColumnIdsArray_1.SetAt(1, 1);
      _ColumnNamesArray_1.SetAt(2, "TLabwareId");
      _ColumnIdsArray_1.SetAt(2, 2);
      _ColumnNamesArray_1.SetAt(3, "TPositionId");
      _ColumnIdsArray_1.SetAt(3, 3);
      _ColumnNamesArray_1.SetAt(4, "TPositionBC");
      _ColumnIdsArray_1.SetAt(4, 4);
      _ColumnNamesArray_1.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_1.SetAt(5, 5);
      _ColumnNamesArray_1.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_1.SetAt(6, 6);
      _ColumnNamesArray_1.SetAt(7, "TVolume");
      _ColumnIdsArray_1.SetAt(7, 7);
      _ColumnNamesArray_1.SetAt(8, "SRackBC");
      _ColumnIdsArray_1.SetAt(8, 8);
      _ColumnNamesArray_1.SetAt(9, "SLabwareId");
      _ColumnIdsArray_1.SetAt(9, 9);
      _ColumnNamesArray_1.SetAt(10, "SPositionId");
      _ColumnIdsArray_1.SetAt(10, 10);
      _ColumnNamesArray_1.SetAt(11, "SPositionBC");
      _ColumnIdsArray_1.SetAt(11, 11);
      _ColumnNamesArray_1.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_1.SetAt(12, 12);
      _ColumnNamesArray_1.SetAt(13, "UserName");
      _ColumnIdsArray_1.SetAt(13, 13);
      _ExperimentsArray_1.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_1, 0, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "SampleCarrier_1.xls", 1, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_2, 0, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "SampleCarrier_2.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_3[];
      variable _ColumnIdsArray_3[];
      variable _ColumnNamesArray_3[];
      variable _ExperimentsArray_3[];
      _FilterIdsArray_3.SetSize(0);
      _ColumnNamesArray_3.SetSize(14);
      _ColumnIdsArray_3.SetSize(14);
      _ColumnNamesArray_3.SetAt(0, "RecordId");
      _ColumnIdsArray_3.SetAt(0, 0);
      _ColumnNamesArray_3.SetAt(1, "TRackBC");
      _ColumnIdsArray_3.SetAt(1, 1);
      _ColumnNamesArray_3.SetAt(2, "TLabwareId");
      _ColumnIdsArray_3.SetAt(2, 2);
      _ColumnNamesArray_3.SetAt(3, "TPositionId");
      _ColumnIdsArray_3.SetAt(3, 3);
      _ColumnNamesArray_3.SetAt(4, "TPositionBC");
      _ColumnIdsArray_3.SetAt(4, 4);
      _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_3.SetAt(5, 5);
      _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_3.SetAt(6, 6);
      _ColumnNamesArray_3.SetAt(7, "TVolume");
      _ColumnIdsArray_3.SetAt(7, 7);
      _ColumnNamesArray_3.SetAt(8, "SRackBC");
      _ColumnIdsArray_3.SetAt(8, 8);
      _ColumnNamesArray_3.SetAt(9, "SLabwareId");
      _ColumnIdsArray_3.SetAt(9, 9);
      _ColumnNamesArray_3.SetAt(10, "SPositionId");
      _ColumnIdsArray_3.SetAt(10, 10);
      _ColumnNamesArray_3.SetAt(11, "SPositionBC");
      _ColumnIdsArray_3.SetAt(11, 11);
      _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_3.SetAt(12, 12);
      _ColumnNamesArray_3.SetAt(13, "UserName");
      _ColumnIdsArray_3.SetAt(13, 13);
      _ExperimentsArray_3.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_3, 0, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "SampleCarrier_3.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_4[];
      variable _ColumnIdsArray_4[];
      variable _ColumnNamesArray_4[];
      variable _ExperimentsArray_4[];
      _FilterIdsArray_4.SetSize(0);
      _ColumnNamesArray_4.SetSize(14);
      _ColumnIdsArray_4.SetSize(14);
      _ColumnNamesArray_4.SetAt(0, "RecordId");
      _ColumnIdsArray_4.SetAt(0, 0);
      _ColumnNamesArray_4.SetAt(1, "TRackBC");
      _ColumnIdsArray_4.SetAt(1, 1);
      _ColumnNamesArray_4.SetAt(2, "TLabwareId");
      _ColumnIdsArray_4.SetAt(2, 2);
      _ColumnNamesArray_4.SetAt(3, "TPositionId");
      _ColumnIdsArray_4.SetAt(3, 3);
      _ColumnNamesArray_4.SetAt(4, "TPositionBC");
      _ColumnIdsArray_4.SetAt(4, 4);
      _ColumnNamesArray_4.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_4.SetAt(5, 5);
      _ColumnNamesArray_4.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_4.SetAt(6, 6);
      _ColumnNamesArray_4.SetAt(7, "TVolume");
      _ColumnIdsArray_4.SetAt(7, 7);
      _ColumnNamesArray_4.SetAt(8, "SRackBC");
      _ColumnIdsArray_4.SetAt(8, 8);
      _ColumnNamesArray_4.SetAt(9, "SLabwareId");
      _ColumnIdsArray_4.SetAt(9, 9);
      _ColumnNamesArray_4.SetAt(10, "SPositionId");
      _ColumnIdsArray_4.SetAt(10, 10);
      _ColumnNamesArray_4.SetAt(11, "SPositionBC");
      _ColumnIdsArray_4.SetAt(11, 11);
      _ColumnNamesArray_4.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_4.SetAt(12, 12);
      _ColumnNamesArray_4.SetAt(13, "UserName");
      _ColumnIdsArray_4.SetAt(13, 13);
      _ExperimentsArray_4.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_4, 0, _FilterIdsArray_4, 0, _ColumnIdsArray_4, _ColumnNamesArray_4, _ExperimentsArray_4, "SampleCarrier_4.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_5[];
      variable _ColumnIdsArray_5[];
      variable _ColumnNamesArray_5[];
      variable _ExperimentsArray_5[];
      _FilterIdsArray_5.SetSize(0);
      _ColumnNamesArray_5.SetSize(14);
      _ColumnIdsArray_5.SetSize(14);
      _ColumnNamesArray_5.SetAt(0, "RecordId");
      _ColumnIdsArray_5.SetAt(0, 0);
      _ColumnNamesArray_5.SetAt(1, "TRackBC");
      _ColumnIdsArray_5.SetAt(1, 1);
      _ColumnNamesArray_5.SetAt(2, "TLabwareId");
      _ColumnIdsArray_5.SetAt(2, 2);
      _ColumnNamesArray_5.SetAt(3, "TPositionId");
      _ColumnIdsArray_5.SetAt(3, 3);
      _ColumnNamesArray_5.SetAt(4, "TPositionBC");
      _ColumnIdsArray_5.SetAt(4, 4);
      _ColumnNamesArray_5.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_5.SetAt(5, 5);
      _ColumnNamesArray_5.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_5.SetAt(6, 6);
      _ColumnNamesArray_5.SetAt(7, "TVolume");
      _ColumnIdsArray_5.SetAt(7, 7);
      _ColumnNamesArray_5.SetAt(8, "SRackBC");
      _ColumnIdsArray_5.SetAt(8, 8);
      _ColumnNamesArray_5.SetAt(9, "SLabwareId");
      _ColumnIdsArray_5.SetAt(9, 9);
      _ColumnNamesArray_5.SetAt(10, "SPositionId");
      _ColumnIdsArray_5.SetAt(10, 10);
      _ColumnNamesArray_5.SetAt(11, "SPositionBC");
      _ColumnIdsArray_5.SetAt(11, 11);
      _ColumnNamesArray_5.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_5.SetAt(12, 12);
      _ColumnNamesArray_5.SetAt(13, "UserName");
      _ColumnIdsArray_5.SetAt(13, 13);
      _ExperimentsArray_5.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_5, 0, _FilterIdsArray_5, 0, _ColumnIdsArray_5, _ColumnNamesArray_5, _ExperimentsArray_5, "SampleCarrier_5.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_6, 0, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "SampleCarrier_6.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_7[];
      variable _ColumnIdsArray_7[];
      variable _ColumnNamesArray_7[];
      variable _ExperimentsArray_7[];
      _FilterIdsArray_7.SetSize(0);
      _ColumnNamesArray_7.SetSize(14);
      _ColumnIdsArray_7.SetSize(14);
      _ColumnNamesArray_7.SetAt(0, "RecordId");
      _ColumnIdsArray_7.SetAt(0, 0);
      _ColumnNamesArray_7.SetAt(1, "TRackBC");
      _ColumnIdsArray_7.SetAt(1, 1);
      _ColumnNamesArray_7.SetAt(2, "TLabwareId");
      _ColumnIdsArray_7.SetAt(2, 2);
      _ColumnNamesArray_7.SetAt(3, "TPositionId");
      _ColumnIdsArray_7.SetAt(3, 3);
      _ColumnNamesArray_7.SetAt(4, "TPositionBC");
      _ColumnIdsArray_7.SetAt(4, 4);
      _ColumnNamesArray_7.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_7.SetAt(5, 5);
      _ColumnNamesArray_7.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_7.SetAt(6, 6);
      _ColumnNamesArray_7.SetAt(7, "TVolume");
      _ColumnIdsArray_7.SetAt(7, 7);
      _ColumnNamesArray_7.SetAt(8, "SRackBC");
      _ColumnIdsArray_7.SetAt(8, 8);
      _ColumnNamesArray_7.SetAt(9, "SLabwareId");
      _ColumnIdsArray_7.SetAt(9, 9);
      _ColumnNamesArray_7.SetAt(10, "SPositionId");
      _ColumnIdsArray_7.SetAt(10, 10);
      _ColumnNamesArray_7.SetAt(11, "SPositionBC");
      _ColumnIdsArray_7.SetAt(11, 11);
      _ColumnNamesArray_7.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_7.SetAt(12, 12);
      _ColumnNamesArray_7.SetAt(13, "UserName");
      _ColumnIdsArray_7.SetAt(13, 13);
      _ExperimentsArray_7.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_7, 0, _FilterIdsArray_7, 0, _ColumnIdsArray_7, _ColumnNamesArray_7, _ExperimentsArray_7, "SampleCarrier_7.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_8[];
      variable _ColumnIdsArray_8[];
      variable _ColumnNamesArray_8[];
      variable _ExperimentsArray_8[];
      _FilterIdsArray_8.SetSize(0);
      _ColumnNamesArray_8.SetSize(14);
      _ColumnIdsArray_8.SetSize(14);
      _ColumnNamesArray_8.SetAt(0, "RecordId");
      _ColumnIdsArray_8.SetAt(0, 0);
      _ColumnNamesArray_8.SetAt(1, "TRackBC");
      _ColumnIdsArray_8.SetAt(1, 1);
      _ColumnNamesArray_8.SetAt(2, "TLabwareId");
      _ColumnIdsArray_8.SetAt(2, 2);
      _ColumnNamesArray_8.SetAt(3, "TPositionId");
      _ColumnIdsArray_8.SetAt(3, 3);
      _ColumnNamesArray_8.SetAt(4, "TPositionBC");
      _ColumnIdsArray_8.SetAt(4, 4);
      _ColumnNamesArray_8.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_8.SetAt(5, 5);
      _ColumnNamesArray_8.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_8.SetAt(6, 6);
      _ColumnNamesArray_8.SetAt(7, "TVolume");
      _ColumnIdsArray_8.SetAt(7, 7);
      _ColumnNamesArray_8.SetAt(8, "SRackBC");
      _ColumnIdsArray_8.SetAt(8, 8);
      _ColumnNamesArray_8.SetAt(9, "SLabwareId");
      _ColumnIdsArray_8.SetAt(9, 9);
      _ColumnNamesArray_8.SetAt(10, "SPositionId");
      _ColumnIdsArray_8.SetAt(10, 10);
      _ColumnNamesArray_8.SetAt(11, "SPositionBC");
      _ColumnIdsArray_8.SetAt(11, 11);
      _ColumnNamesArray_8.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_8.SetAt(12, 12);
      _ColumnNamesArray_8.SetAt(13, "UserName");
      _ColumnIdsArray_8.SetAt(13, 13);
      _ExperimentsArray_8.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_8, 0, _FilterIdsArray_8, 0, _ColumnIdsArray_8, _ColumnNamesArray_8, _ExperimentsArray_8, "SampleCarrier_8.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_9[];
      variable _ColumnIdsArray_9[];
      variable _ColumnNamesArray_9[];
      variable _ExperimentsArray_9[];
      _FilterIdsArray_9.SetSize(0);
      _ColumnNamesArray_9.SetSize(14);
      _ColumnIdsArray_9.SetSize(14);
      _ColumnNamesArray_9.SetAt(0, "RecordId");
      _ColumnIdsArray_9.SetAt(0, 0);
      _ColumnNamesArray_9.SetAt(1, "TRackBC");
      _ColumnIdsArray_9.SetAt(1, 1);
      _ColumnNamesArray_9.SetAt(2, "TLabwareId");
      _ColumnIdsArray_9.SetAt(2, 2);
      _ColumnNamesArray_9.SetAt(3, "TPositionId");
      _ColumnIdsArray_9.SetAt(3, 3);
      _ColumnNamesArray_9.SetAt(4, "TPositionBC");
      _ColumnIdsArray_9.SetAt(4, 4);
      _ColumnNamesArray_9.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_9.SetAt(5, 5);
      _ColumnNamesArray_9.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_9.SetAt(6, 6);
      _ColumnNamesArray_9.SetAt(7, "TVolume");
      _ColumnIdsArray_9.SetAt(7, 7);
      _ColumnNamesArray_9.SetAt(8, "SRackBC");
      _ColumnIdsArray_9.SetAt(8, 8);
      _ColumnNamesArray_9.SetAt(9, "SLabwareId");
      _ColumnIdsArray_9.SetAt(9, 9);
      _ColumnNamesArray_9.SetAt(10, "SPositionId");
      _ColumnIdsArray_9.SetAt(10, 10);
      _ColumnNamesArray_9.SetAt(11, "SPositionBC");
      _ColumnIdsArray_9.SetAt(11, 11);
      _ColumnNamesArray_9.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_9.SetAt(12, 12);
      _ColumnNamesArray_9.SetAt(13, "UserName");
      _ColumnIdsArray_9.SetAt(13, 13);
      _ExperimentsArray_9.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_9, 0, _FilterIdsArray_9, 0, _ColumnIdsArray_9, _ColumnNamesArray_9, _ExperimentsArray_9, "SampleCarrier_9.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_10[];
      variable _ColumnIdsArray_10[];
      variable _ColumnNamesArray_10[];
      variable _ExperimentsArray_10[];
      _FilterIdsArray_10.SetSize(0);
      _ColumnNamesArray_10.SetSize(14);
      _ColumnIdsArray_10.SetSize(14);
      _ColumnNamesArray_10.SetAt(0, "RecordId");
      _ColumnIdsArray_10.SetAt(0, 0);
      _ColumnNamesArray_10.SetAt(1, "TRackBC");
      _ColumnIdsArray_10.SetAt(1, 1);
      _ColumnNamesArray_10.SetAt(2, "TLabwareId");
      _ColumnIdsArray_10.SetAt(2, 2);
      _ColumnNamesArray_10.SetAt(3, "TPositionId");
      _ColumnIdsArray_10.SetAt(3, 3);
      _ColumnNamesArray_10.SetAt(4, "TPositionBC");
      _ColumnIdsArray_10.SetAt(4, 4);
      _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_10.SetAt(5, 5);
      _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_10.SetAt(6, 6);
      _ColumnNamesArray_10.SetAt(7, "TVolume");
      _ColumnIdsArray_10.SetAt(7, 7);
      _ColumnNamesArray_10.SetAt(8, "SRackBC");
      _ColumnIdsArray_10.SetAt(8, 8);
      _ColumnNamesArray_10.SetAt(9, "SLabwareId");
      _ColumnIdsArray_10.SetAt(9, 9);
      _ColumnNamesArray_10.SetAt(10, "SPositionId");
      _ColumnIdsArray_10.SetAt(10, 10);
      _ColumnNamesArray_10.SetAt(11, "SPositionBC");
      _ColumnIdsArray_10.SetAt(11, 11);
      _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_10.SetAt(12, 12);
      _ColumnNamesArray_10.SetAt(13, "UserName");
      _ColumnIdsArray_10.SetAt(13, 13);
      _ExperimentsArray_10.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_10, 0, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "SampleCarrier_10.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_11[];
      variable _ColumnIdsArray_11[];
      variable _ColumnNamesArray_11[];
      variable _ExperimentsArray_11[];
      _FilterIdsArray_11.SetSize(0);
      _ColumnNamesArray_11.SetSize(14);
      _ColumnIdsArray_11.SetSize(14);
      _ColumnNamesArray_11.SetAt(0, "RecordId");
      _ColumnIdsArray_11.SetAt(0, 0);
      _ColumnNamesArray_11.SetAt(1, "TRackBC");
      _ColumnIdsArray_11.SetAt(1, 1);
      _ColumnNamesArray_11.SetAt(2, "TLabwareId");
      _ColumnIdsArray_11.SetAt(2, 2);
      _ColumnNamesArray_11.SetAt(3, "TPositionId");
      _ColumnIdsArray_11.SetAt(3, 3);
      _ColumnNamesArray_11.SetAt(4, "TPositionBC");
      _ColumnIdsArray_11.SetAt(4, 4);
      _ColumnNamesArray_11.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_11.SetAt(5, 5);
      _ColumnNamesArray_11.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_11.SetAt(6, 6);
      _ColumnNamesArray_11.SetAt(7, "TVolume");
      _ColumnIdsArray_11.SetAt(7, 7);
      _ColumnNamesArray_11.SetAt(8, "SRackBC");
      _ColumnIdsArray_11.SetAt(8, 8);
      _ColumnNamesArray_11.SetAt(9, "SLabwareId");
      _ColumnIdsArray_11.SetAt(9, 9);
      _ColumnNamesArray_11.SetAt(10, "SPositionId");
      _ColumnIdsArray_11.SetAt(10, 10);
      _ColumnNamesArray_11.SetAt(11, "SPositionBC");
      _ColumnIdsArray_11.SetAt(11, 11);
      _ColumnNamesArray_11.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_11.SetAt(12, 12);
      _ColumnNamesArray_11.SetAt(13, "UserName");
      _ColumnIdsArray_11.SetAt(13, 13);
      _ExperimentsArray_11.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_11, 0, _FilterIdsArray_11, 0, _ColumnIdsArray_11, _ColumnNamesArray_11, _ExperimentsArray_11, "SampleCarrier_11.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
    STCC::ResetFilterSequences();
    {
      variable _FilterIdsArray_12[];
      variable _ColumnIdsArray_12[];
      variable _ColumnNamesArray_12[];
      variable _ExperimentsArray_12[];
      _FilterIdsArray_12.SetSize(0);
      _ColumnNamesArray_12.SetSize(14);
      _ColumnIdsArray_12.SetSize(14);
      _ColumnNamesArray_12.SetAt(0, "RecordId");
      _ColumnIdsArray_12.SetAt(0, 0);
      _ColumnNamesArray_12.SetAt(1, "TRackBC");
      _ColumnIdsArray_12.SetAt(1, 1);
      _ColumnNamesArray_12.SetAt(2, "TLabwareId");
      _ColumnIdsArray_12.SetAt(2, 2);
      _ColumnNamesArray_12.SetAt(3, "TPositionId");
      _ColumnIdsArray_12.SetAt(3, 3);
      _ColumnNamesArray_12.SetAt(4, "TPositionBC");
      _ColumnIdsArray_12.SetAt(4, 4);
      _ColumnNamesArray_12.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_12.SetAt(5, 5);
      _ColumnNamesArray_12.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_12.SetAt(6, 6);
      _ColumnNamesArray_12.SetAt(7, "TVolume");
      _ColumnIdsArray_12.SetAt(7, 7);
      _ColumnNamesArray_12.SetAt(8, "SRackBC");
      _ColumnIdsArray_12.SetAt(8, 8);
      _ColumnNamesArray_12.SetAt(9, "SLabwareId");
      _ColumnIdsArray_12.SetAt(9, 9);
      _ColumnNamesArray_12.SetAt(10, "SPositionId");
      _ColumnIdsArray_12.SetAt(10, 10);
      _ColumnNamesArray_12.SetAt(11, "SPositionBC");
      _ColumnIdsArray_12.SetAt(11, 11);
      _ColumnNamesArray_12.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_12.SetAt(12, 12);
      _ColumnNamesArray_12.SetAt(13, "UserName");
      _ColumnIdsArray_12.SetAt(13, 13);
      _ExperimentsArray_12.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.SampleCarrier_12, 0, _FilterIdsArray_12, 0, _ColumnIdsArray_12, _ColumnNamesArray_12, _ExperimentsArray_12, "SampleCarrier_12.xls", 0, 0, "C:\Program Files (x86)\HAMILTON\LogFiles", 1);
    }
  } }
