#include "ISWAP.res"
variable loopCounter1;
global device ML_STAR ("ISWAP.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_DMSO_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_DMSO_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.Tips, ML_STAR.ReagentSequence, ML_STAR.PipettingSequencePlate1to3, 1, 1, 20, 0, 2, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.TransportSequencePlate1to3.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.TransportSequencePlate1to3, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
        ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        if (
           (ML_STAR.TransportSequencePlate1to3.GetCurrentPosition() > 0 && ML_STAR.TransportSequencePlate1to3.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.TransportSequencePlate1to3.SetMax(ML_STAR.TransportSequencePlate1to3.GetTotal());
      ML_STAR.TransportSequencePlate1to3.SetCurrentPosition(1);
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  } }
