 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "TempSet.res"
global device ML_STAR ("TempSet.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
dialog dialogHandle2;
variable OutputReturn;
variable CTemp;
variable NoSamples;
variable loopCounter1;
variable TipCounterVariable;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    TipCounterVariable = Translate("MyStandardTips");
    dialogHandle1.SetInputSize(2);
    dialogHandle1.SetInputField(0, Translate("How many samples today?"), hslInteger, 96, 1, 96);
    dialogHandle1.SetInputField(1, Translate("Carrier Temperature in C?"), hslFloat, 10.0);
    dialogHandle1.ShowInput(Translate("Input"), hslInfinite, hslOKOnly | hslDefButton1);
    NoSamples = dialogHandle1.GetInputField(0);
    CTemp = dialogHandle1.GetInputField(1);
    ML_STAR._92583EF3_9ED1_482b_BE67_14A5B021FCEA("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"); // SetCarrierTemperature
    TipCount::Edit2(ML_STAR.AllTips, TipCounterVariable, ML_STAR, 7);
    ML_STAR.AllTubes.SetCount(NoSamples);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.AllTubes.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.AllTubes, 1);
        loopCounter1 = loopCounter1 + 1;
        AlignSequences(hslTrue, ML_STAR.AllTips, 1, ML_STAR.AllTubes, 1, ML_STAR.plate, 1);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.AllTubes.GetCurrentPosition() > 0 && ML_STAR.AllTubes.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.AllTubes.SetMax(ML_STAR.AllTubes.GetTotal());
      ML_STAR.AllTubes.SetCurrentPosition(1);
    }
    TipCount::Write2(ML_STAR.AllTips, TipCounterVariable, ML_STAR);
    dialogHandle2.SetOutput(Translate("Unload the tip carrier?"));
    OutputReturn = dialogHandle2.ShowOutput(Translate("Output"), hslYesNo | hslInformation | hslDefButton2, hslInfinite);
    if (OutputReturn == 6)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    HSLML_STAR::CreateATBarcodefile(ML_STAR, Translate("plate"));
  } }
